PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = pAdaptTest6
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Routines
  Routine trial1
    MouseComponent trial1Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial1CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window

        #2 different sets of target angles
        targetAngles1 = [40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50, 40, 50]
        targetAngles2 = [130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140, 130, 140]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
        #set up a task version
        taskVer = str(expInfo['taskVer'])
        rtd = 30
        #choose which sets of angles
        if (taskVer == '1' or taskVer == '2' or taskVer == '3' or taskVer == '4' or taskVer == '5' or taskVer == '6'):
            targetAngles = targetAngles1

        if (taskVer == '7' or taskVer == '8' or taskVer == '9' or taskVer == '10' or taskVer == '11' or taskVer == '12'):
            targetAngles = targetAngles2
      Begin Routine:
        targetangle = targetAngles[trials1.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial1Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial1Num.text = str(trials1.thisN+1)+' / 36'

        trial1Cursor.pos = (1.5,1.5)
        trial1Mouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trial1Cursor.pos[0]-trial1Target.pos[0])**2 + (trial1Cursor.pos[1]-trial1Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial1Cursor.pos[0]**2 + trial1Cursor.pos[1]**2)

        steps.append(trial1Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial1Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial1Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trial1Mouse.getPos()[0], trial1Mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial1Step
      startExpValue = 0
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    TextComponent trial1Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 28
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    KeyboardComponent trial1Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Use Mouse. Space continue
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    KeyboardComponent instr1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeFix1
      Code Type = Auto->JS
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  Routine trial2
    MouseComponent trial2Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial2CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window


        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';

        rtd = 30
        if (taskVer == '1' or taskVer == '2' or taskVer == '3' or taskVer == '4' or taskVer == '5' or taskVer == '6'):
            targetAngles = targetAngles1

        if (taskVer == '7' or taskVer == '8' or taskVer == '9' or taskVer == '10' or taskVer == '11' or taskVer == '12'):
            targetAngles = targetAngles2
      Begin Routine:
        targetangle = targetAngles[trials2.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial2Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial2Num.text = str(trials2.thisN+1)+' / 96'

        trial2Cursor.pos = (1.5,1.5)
        trial2Mouse.pos = (1.5,1.5)

        #Set up rotations
        if (taskVer == '1' or taskVer == '7'):
            ang = 30
            rtd = ang*(pi/180)
        if (taskVer == '2' or taskVer == '8'):
            if (trials2.thisN <= 47):
                ang = (trials2.thisN+1)*0.625
                rtd = ang*(pi/180)
            else:
                ang = 30
                rtd = ang*(pi/180)
        if (taskVer == '3' or taskVer == '9'):
            if (trials2.thisN <= 23):
                ang = 7.5
                rtd = ang*(pi/180)
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = 15
                rtd = ang*(pi/180)
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = 22.5
                rtd = ang*(pi/180)
            else:
                ang = 30
                rtd = ang*(pi/180)
        if (taskVer == '4' or taskVer == '10'):
            ang = -30
            rtd = ang*(pi/180)
        if (taskVer == '5'  or taskVer == '11'):
            if (trials2.thisN <= 47):
                ang = -(trials2.thisN+1)*0.625
                rtd = ang*(pi/180)
            else:
                ang = -30
                rtd = ang*(pi/180)
        if (taskVer == '6' or taskVer == '12'):
            if (trials2.thisN <= 23):
                ang = -7.5
                rtd = ang*(pi/180)
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = -15
                rtd = ang*(pi/180)
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = -22.5
                rtd = ang*(pi/180)
            else:
                ang = -30
                rtd = ang*(pi/180)

        trial2Text.text = str(ang)
      Each Frame:
        CursorTargetDistance = sqrt((trial2Cursor.pos[0]-trial2Target.pos[0])**2 + (trial2Cursor.pos[1]-trial2Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial2Cursor.pos[0]**2 + trial2Cursor.pos[1]**2)

        steps.append(trial2Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial2Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial2Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = ((trial2Mouse.getPos()[0]*cos(rtd))-(trial2Mouse.getPos()[1]*sin(rtd)), (trial2Mouse.getPos()[0]*sin(rtd))+(trial2Mouse.getPos()[1]*cos(rtd)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial2Step
      startExpValue = 0
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    TextComponent trial2Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 96
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    KeyboardComponent trial2Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trial2Text
      letterHeight = 0.05
      pos = (-0.4, 0.3)
      startVal [time (s)] = 0.0
      text = ang
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  Routine trial3
    MouseComponent trial3Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial3CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window


        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      Begin Routine:
        targetangle = targetAngles[trials3.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial3Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial3Num.text = str(trials3.thisN+1)+' / 8'

        trial3Cursor.pos = (1.5,1.5)
        trial3Mouse.pos = (1.5,1.5)


        #Set up inverses
        if (taskVer == '4' or taskVer == '10'):
            ang = 30
            rtd = ang*(pi/180)
        if (taskVer == '5' or taskVer == '11'):
            if (trials3.thisN <= 47):
                ang = (trials3.thisN+1)*0.625
                rtd = ang*(pi/180)
            else:
                ang = 30
                rtd = ang*(pi/180)
        if (taskVer == '6' or taskVer == '12'):
            if (trials3.thisN <= 23):
                ang = 7.5
                rtd = ang*(pi/180)
            elif (trials3.thisN > 23 and trials3.thisN <= 47):
                ang = 15
                rtd = ang*(pi/180)
            elif (trials3.thisN > 47 and trials3.thisN <= 71):
                ang = 22.5
                rtd = ang*(pi/180)
            else:
                ang = 30
                rtd = ang*(pi/180)
        if (taskVer == '1' or taskVer == '7'):
            ang = -30
            rtd = ang*(pi/180)
        if (taskVer == '2' or taskVer == '8'):
            if (trials3.N <= 47):
                ang = -(trials3.thisN+1)*0.625
                rtd = ang*(pi/180)
            else:
                ang = -30
                rtd = ang*(pi/180)
        if (taskVer == '3' or taskVer == '9'):
            if (trials3.thisN <= 23):
                ang = -7.5
                rtd = ang*(pi/180)
            elif (trials3.thisN > 23 and trials3.thisN <= 47):
                ang = -15
                rtd = ang*(pi/180)
            elif (trials3.thisN > 47 and trials3.thisN <= 71):
                ang = -22.5
                rtd = ang*(pi/180)
            else:
                ang = -30
                rtd = ang*(pi/180)

        trial3Text.text = str(ang)
      Each Frame:
        CursorTargetDistance = sqrt((trial3Cursor.pos[0]-trial3Target.pos[0])**2 + (trial3Cursor.pos[1]-trial3Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial3Cursor.pos[0]**2 + trial3Cursor.pos[1]**2)

        steps.append(trial3Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial3Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial3Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = ((trial3Mouse.getPos()[0]*cos(rtd))-(trial3Mouse.getPos()[1]*sin(rtd)), (trial3Mouse.getPos()[0]*sin(rtd))+(trial3Mouse.getPos()[1]*cos(rtd)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial3Step
      startExpValue = 0
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    TextComponent trial3Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 8
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    KeyboardComponent trial3Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trial3Text
      letterHeight = 0.05
      pos = (-0.4, 0.3)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Space end
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeFix2
      Code Type = JS
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
  Routine fixation
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial4
    MouseComponent trial4Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial4CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window


        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      Begin Routine:
        targetangle = targetAngles[trials4.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0
        #'buffer' circle set up
        bufferOpacity = 0
        bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
        #allows cursor opacity changing
        cursorOpacity = 0

        homeStart = False
        reachOut = False

        trial4Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial4Num.text = str(trials4.thisN+1)+' / 24'

        trial4Cursor.pos = (1.5,1.5)
        trial4Mouse.pos = (1.5,1.5)

        theta = (targetangle / 180) * pi
      Each Frame:
        CursorTargetDistance = sqrt((trial4Cursor.pos[0]-trial4Target.pos[0])**2 + (trial4Cursor.pos[1]-trial4Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2)

        steps.append(trial3Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial4Step = 1
            bufferOpacity = 0
            cursorOpacity = 1
            if (CursorHomeDistance < .075):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial4Step = 2
            bufferOpacity = 0
            cursorOpacity = 1
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial4Step = 3
            #COntrols the 'buffer'
            bufferOpacity = 1
            bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
            #controls the cursor
            cursorOpacity = 0
            if (CursorHomeDistance < .2):
                cursorOpacity = 1
            if (CursorHomeDistance < .075):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial4Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial4Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial4Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = (sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(cos(theta)), sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(sin(theta)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial4Step
      startExpValue = 0
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    TextComponent trial4Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 24
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    KeyboardComponent trial4Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent trial4Buff
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = bufferOpacity
      shape = regular polygon...
      size [set every frame] = bufferRadius
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  Routine fixation
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = pAdaptCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 1)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 2)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 3)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 4)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 5)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 6)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 7)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 8)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 9)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 10)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 11)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 12)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 13)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 14)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 15)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 16)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 17)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 18)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 19)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 20)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 21)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 22)])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
    Routine trial1
  LoopTerminator trials1
  Routine instruction1
  Routine fixation
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = pAdaptCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 1)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 2)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 3)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 4)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 5)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 6)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 7)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 8)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 9)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 10)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 11)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 12)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 13)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 14)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 15)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 16)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 17)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 18)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 19)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 20)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 21)]),
      OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 22)])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
    Routine trial2
  LoopTerminator trials2
  Routine instruction1
  Routine fixation
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = pAdaptCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 1)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 2)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 3)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 4)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 5)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 6)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 7)]),
      OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 8)])]
    Routine trial3
  LoopTerminator trials3
  Routine instruction1
  Routine fixation
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = pAdaptCond4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 1)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 2)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 3)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 4)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 5)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 6)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 7)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 8)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 9)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 10)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 11)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 12)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 13)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 14)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 15)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 16)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 17)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 18)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 19)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 20)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 21)]),
      OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 22)])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
    Routine trial4
  LoopTerminator trials4
  Routine end
